close("*");
run("Clear Results");
directory = getDirectory("Choose a folder containing 16x stage II/III wave files.");
fileList = getFileList(directory);

//Variable for size of grid square as nxn grid to measure velocity (ideally power of 2)
grid = 8;

//Width divisor step size for translating grid square (ideally power of 2)
step = 16;

//8-bit intensity threshold for finding a wave in dt stack. Default is 1.
waveThreshold = 1;

//Variable for how many frames a wave can stall in a single grid box
waveGap = 2;

//SLices to add to either side of detected wave (increase window size)
waveAddSlice = 3;

//Maximum duration for a wave (nFrames)
maxDuration = 300;

//Initialize arrays for saving the start and end of each wave in time
BZarray = newArray(0);
BDepthArray = newArray(0);
totalSlices = 0;

//Initialize LUTs
redAngle = newArray(255, 255, 255, 255, 255, 255, 255, 255, 255, 255, 255, 255, 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255);
greenAngle = newArray(0, 6, 12, 18, 24, 30, 36, 42, 48, 54, 60, 66, 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0);
blueAngle = newArray(0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 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0);
			
redVel = newArray(0, 46, 45, 44, 42, 41, 40, 39, 37, 36, 35, 33, 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233);
greenVel = newArray(0, 2, 2, 2, 2, 2, 2, 2, 2, 1, 1, 1, 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34);
blueVel = newArray(0, 120, 122, 123, 124, 125, 126, 127, 128, 129, 131, 132, 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16);


//Ask user what stage wave this is
Dialog.create("Choose Stage and Output");
items = newArray("N/A", "Stage II", "Stage III");
outputChoice = newArray("Maps", "Quiver Plots");
analysisChoice = newArray("Individual", "Cumulative");

//Try and identify the wave stage from the file name, and set default radio button to this position
if(matches(fileList[0], ".*_sII_.*")) defaultButton = "Stage II";
else if(matches(fileList[0], ".*_sIII_.*")) defaultButton = "Stage III";
else defaultButton = "N/A";

Dialog.addRadioButtonGroup("What stage wave is this?", items, 3, 1, defaultButton);
Dialog.addRadioButtonGroup("Select analysis Type:", analysisChoice, 1, 2, "Individual");
Dialog.addRadioButtonGroup("Select Output Type:", outputChoice, 1, 2, "Quiver Plots");
Dialog.addCheckbox("Quiver plot temporal color code", true); 
Dialog.show;
waveStage = Dialog.getRadioButton();
cumulativeType = Dialog.getRadioButton();
outputType = Dialog.getRadioButton();
colorCode = Dialog.getCheckbox();
if(matches(cumulativeType, "Cumulative")) cumulativeAnalysis = true;
else cumulativeAnalysis = false;

//Calculate final variables and double check validity
if(step < grid){
	exit("stepDvisor needs to be >= grid in order for no gaps between grid squares");
}

//Exit the macro if no wave type is specified
if(matches(waveStage, "N/A")){
	exit("No stage was specified, so mask analysis cannot be performed.");
}

//If the analysis is going to be cumulative, create two arrays to store the cumulative results
if(!cumulativeAnalysis){
	cumXarray = newArray(step*step);
	cumYarray = newArray(step*step);
	cumVelCountArray = newArray(step*step);
	cumVelArray = newArray(step*step);
	cumAngleArray = newArray(step*step);

	//Create a list of temporary subdirectories to store the results for each file
	tempDirArray = newArray(fileList.length);
	for(a=0; a<fileList.length; a++){
		tempDirArray[a] = directory + replace(fileList[a], ".tif", "ehxA8Jlmuj/");
		File.makeDirectory(tempDirArray[a]);
	}
}

 
for(fileNum = 0; fileNum<fileList.length; fileNum++){
	setBatchMode(true);
	open(directory + fileList[fileNum]);
	image = fileList[fileNum];

	//Check to make sure that the stack dimensions are consistent for all data
	if(fileNum == 0){
		getDimensions(width, height, channels, slices, frames);
	}
	else{
		getDimensions(width1, height1, channels1, slices1, frames1);
		if(width != width1 || height != height1 || channels != channels1){
			exit("Error: The image: " + fileList[fileNum] + " has different dimensions than: " + fileList[0] + ".");
		}
	}

	//If image has not yet been processed and segmented, process it.
	if(!matches(image, "Objects map of dF Stack.tif")){
		//If the wave is a stage III wave, then process stack to find peak dF/dt
		if(matches(waveStage, "Stage II")){
			//Perform initial processing to dF/dt stack
			processStageII(image);
			
			//Find each wave and color code them
			selectWindow("dF Stack");
			Stack.getStatistics(dummy, stackMean);
			startFound = false;
			endFound = false;
			longestWave = 0;
			waveCount = 1;
	
			for(a=1; a<=nSlices; a++){
				selectWindow("Objects map of dF Stack");
				setSlice(a);
				getStatistics(dummy, mean);
		
				//If slice mean > stack mean, then wave start has been found
				if(!startFound && mean > stackMean){
					startFound = true;
					waveStart = a - waveAddSlice;
					if(waveStart<1) waveStart = 1;
		
					//If a start slice is found too close to the end, ignore start slice
					if(waveStart > nSlices-2) startFound = false;				
				}
				
				//If slice mean < stack mean, then wave end has been found
				if(startFound && mean < stackMean){
					endFound = true;
		
					//A -1 offset is needed to 
					waveEnd = a + waveAddSlice;
					if(waveEnd > nSlices) waveEnd = nSlices;
		
				}
		
				//If a full wave is found, remove it from the stack and analyze it
				if(startFound && endFound){
					startFound = false;
					endFound = false;
		
					stageIIsegmentMask(waveStart, waveEnd, waveCount);
					
					waveCount += 1;
					a = waveEnd;
				}
				
				//Otherwise, data is not a wave, so clear slice
				if (!startFound && !endFound){
					selectWindow("Objects map of dF Stack");
					setSlice(a);
					run("Select All");
					setBackgroundColor(0, 0, 0);
					run("Clear", "slice");
					run("Select None");
				}									
			}
		}
		//If the wave is a stage III wave, then process stack to find peak dF/F
		else{
			processStageIIIimage(image);
			
		}
	
		//Create random lUT and apply to objects map
		selectWindow("Objects map of dF Stack");
		reds = newArray(0, 231, 25, 27, 112, 89, 53, 77, 155, 153, 91, 19, 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255);
		greens = newArray(0, 217, 131, 18, 66, 198, 59, 170, 108, 8, 167, 207, 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255);
		blues = newArray(0, 43, 203, 219, 253, 158, 5, 190, 72, 11, 23, 233, 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255);
		setLut(reds, greens, blues);
	
	}
	else{
		rename("Objects map of dF Stack");
		resultsFile = replace(fileOpen, "Objects map of dF Stack.tif", "Results.xls");
		dfFile = replace(fileOpen, "Objects map of dF Stack.tif", "dF Stack.tif");
		open(resultsFile);
		open(dfFile);
		rename("dF Stack");
	}
	
	//Remove each wave one at a time and apply a temporal color code
	selectWindow("Objects map of dF Stack");
	max = nResults;
	getDimensions(width, height, channels, slices, frames);
	
	//Make dF/dt images to store results
	newImage("Max Wave Vector Velocity dF/dt ("+ grid + " grid " + step +" step)", "32-bit black", step, step, max);
	newImage("Max Wave Vector Angle dF/dt ("+ grid + " grid " + step +" step)", "32-bit black", step, step, max);
	newImage("Vector Sum Velocity dF/dt ("+ grid + " grid " + step +" step)", "32-bit black", step, step, max);
	newImage("Vector Sum Angle dF/dt ("+ grid + " grid " + step +" step)", "32-bit black", step, step, max);
	newImage("dF/dt NaN mask", "32-bit black", width, height, max);
	
	//Make mask images to store reuslts
	newImage("Max Wave Vector Velocity mask ("+ grid + " grid " + step +" step)", "32-bit black", step, step, max);
	newImage("Max Wave Vector Angle mask ("+ grid + " grid " + step +" step)", "32-bit black", step, step, max);
	newImage("Vector Sum Velocity mask ("+ grid + " grid " + step +" step)", "32-bit black", step, step, max);
	newImage("Vector Sum Angle mask ("+ grid + " grid " + step +" step)", "32-bit black", step, step, max);
	newImage("mask NaN mask", "32-bit black", width, height, max);
	
	//Perform wave vector analysis on dF/dt stack
	for(a=1; a<=max; a++){
		selectWindow("Objects map of dF Stack");
		
		//Duplicate the object map, and remove everything but the current wave
		run("Duplicate...", "title=wave duplicate");
		selectWindow("wave");
	
		waveStart = getResult("BZ", a-1);
		waveEnd = waveStart + getResult("B-depth", a-1);
		waveStart -= waveAddSlice;
		if(waveStart<1) waveStart = 1;
		waveEnd += waveAddSlice;
		if(waveEnd > nSlices) waveEnd = nSlices;
		
		//Excluded massively prolonged "waves" from analysis, as they are actually background objects			
		if(waveEnd-waveStart <= maxDuration) waveFrontStack(waveStart, waveEnd, grid, a, waveGap, width, height, step, waveThreshold, "dF/dt", cumXarray, cumYarray, cumVelCountArray);
		
	}
	
	//Create mask from dF/dt stack
	selectWindow("dF Stack");
	run("Duplicate...", "title=[dF Stack Copy] duplicate");
	
	if(matches(waveStage, "Stage II")){
		selectWindow("dF Stack");
		run("Gaussian Blur...", "sigma=10 stack");
		setAutoThreshold("MaxEntropy dark stack");
		run("Convert to Mask", "method=MaxEntropy background=Dark black");
	}
	
	
	if(matches(waveStage, "Stage III")){
		selectWindow("dF Stack");
		getDimensions(width, height, channels, slices, frames);
		run("Canvas Size...", "width="+ width + 2 + " height=" + height + 2 + " position=Center zero");
		run("Find Edges", "stack");
		setAutoThreshold("Intermodes dark stack");
		setOption("BlackBackground", false);
		run("Convert to Mask", "method=Intermodes background=Dark black");
		run("Invert", "stack");
		run("Fill Holes", "stack");
		run("Invert", "stack");
		run("Canvas Size...", "width="+ width + " height=" + height + " position=Center zero");
	}
	
	//Perform wave vector analysis on mask stack
	for(a=1; a<=max; a++){
		selectWindow("Objects map of dF Stack");
		
		//Duplicate the object map, and remove everything but the current wave
		run("Duplicate...", "title=wave duplicate");
		selectWindow("wave");
	
		waveStart = getResult("BZ", a-1);
		waveEnd = waveStart + getResult("B-depth", a-1);
		waveStart -= waveAddSlice;
		if(waveStart<1) waveStart = 1;
		waveEnd += waveAddSlice;
		if(waveEnd > nSlices) waveEnd = nSlices;

		//Excluded massively prolonged "waves" from analysis, as they are actually background objects
		if(waveEnd-waveStart <= maxDuration) waveFrontStack(waveStart, waveEnd, grid, a, waveGap, width, height, step, waveThreshold, "dF/dt", cumXarray, cumYarray, cumVelCountArray);
		
	}
	selectWindow("Objects map of dF Stack");
	getDimensions(width, height, channels, slices, frames);

	//If individual wave results are selected 
	if(!cumulativeAnalysis){
	
		//If the ouput type is "map", then create all maps
		if(matches(outputType, "Maps")){
			//Create NaN mask by dividing the image by itself (0/0 = NaN)
			imageCalculator("Divide stack", "dF/dt NaN mask","dF/dt NaN mask");
			imageCalculator("Divide stack", "mask NaN mask","mask NaN mask");
			
			setBatchMode("exit & display");
						
			selectWindow("Vector Sum Angle dF/dt ("+ grid + " grid " + step +" step)");
			run("Size...", "width="+width+" height="+height+" depth="+nSlices+" constrain average interpolation=None");
			imageCalculator("Multiply stack", "Vector Sum Angle dF/dt ("+ grid + " grid " + step +" step)","dF/dt NaN mask");
			setMinAndMax(-180, 180);
			setLut(redAngle, greenAngle, blueAngle);
			setLocation(0, 100);
			for(a=1; a<512/width; a++){
				wait(100);
				run("In [+]");
			}
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("Max Wave Vector Angle dF/dt ("+ grid + " grid " + step +" step)");
			run("Size...", "width="+width+" height="+height+" depth="+nSlices+" constrain average interpolation=None");
			imageCalculator("Multiply stack", "Max Wave Vector Angle dF/dt ("+ grid + " grid " + step +" step)","dF/dt NaN mask");
			setMinAndMax(-180, 180);
			setLut(redAngle, greenAngle, blueAngle);
			setLocation(0, 565);
			for(a=1; a<512/width; a++){
				wait(100);
				run("In [+]");
			}
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("Vector Sum Velocity dF/dt ("+ grid + " grid " + step +" step)");
			run("Size...", "width="+width+" height="+height+" depth="+nSlices+" constrain average interpolation=Bicubic");
			imageCalculator("Multiply stack", "Vector Sum Velocity dF/dt ("+ grid + " grid " + step +" step)","dF/dt NaN mask");
			if(nSlices > 1) Stack.getStatistics(dummy, dummy, dummy, max);
			else getStatistics(dummy, dummy, dummy, max);
			setMinAndMax(0, max);
			setLut(redVel, greenVel, blueVel);
			setLocation(410, 100);
			for(a=1; a<512/width; a++){
				wait(100);
				run("In [+]");
			}
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("Max Wave Vector Velocity dF/dt ("+ grid + " grid " + step +" step)");
			run("Size...", "width="+width+" height="+height+" depth="+nSlices+" constrain average interpolation=Bicubic");
			imageCalculator("Multiply stack", "Max Wave Vector Velocity dF/dt ("+ grid + " grid " + step +" step)","dF/dt NaN mask");
			if(nSlices > 1) Stack.getStatistics(dummy, dummy, dummy, max);
			else getStatistics(dummy, dummy, dummy, max);
			setMinAndMax(0, max);
			setLut(redVel, greenVel, blueVel);
			setLocation(410, 565);
			for(a=1; a<512/width; a++){
				wait(100);
				run("In [+]");
			}
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("Objects map of dF Stack");
			setLocation(820, 720);
			for(a=2; a<512/width; a++){
				wait(100);
				run("In [+]");
			}
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("dF Stack");
			rename("dF Stack Mask");
			setLocation(820, 385);
			for(a=2; a<512/width; a++){
				wait(100);
				run("In [+]");
			}
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("dF Stack Copy");
			rename("Processed dF Stack");
			if(nSlices > 1) Stack.getStatistics(dummy, dummy, dummy, max); 
			else getStatistics(dummy, dummy, dummy, max);
			setMinAndMax(0, max);
			run("Rainbow RGB");
			setLocation(820, 50);
			for(a=2; a<512/width; a++){
				wait(100);
				run("In [+]");
			}
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("Vector Sum Angle mask ("+ grid + " grid " + step +" step)");
			run("Size...", "width="+width+" height="+height+" depth="+nSlices+" constrain average interpolation=None");
			imageCalculator("Multiply stack", "Vector Sum Angle mask ("+ grid + " grid " + step +" step)","mask NaN mask");
			setMinAndMax(-180, 180);
			setLut(redAngle, greenAngle, blueAngle);
			setLocation(1100, 100);
			for(a=1; a<512/width; a++){
				wait(100);
				run("In [+]");
			}
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("Max Wave Vector Angle mask ("+ grid + " grid " + step +" step)");
			run("Size...", "width="+width+" height="+height+" depth="+nSlices+" constrain average interpolation=None");
			imageCalculator("Multiply stack", "Max Wave Vector Angle mask ("+ grid + " grid " + step +" step)","mask NaN mask");
			setMinAndMax(-180, 180);
			setLut(redAngle, greenAngle, blueAngle);
			setLocation(1100, 565);
			for(a=1; a<512/width; a++){
				wait(100);
				run("In [+]");
			}
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("Vector Sum Velocity mask ("+ grid + " grid " + step +" step)");
			run("Size...", "width="+width+" height="+height+" depth="+nSlices+" constrain average interpolation=Bicubic");
			imageCalculator("Multiply stack", "Vector Sum Velocity mask ("+ grid + " grid " + step +" step)","mask NaN mask");
			if(nSlices > 1) Stack.getStatistics(dummy, dummy, dummy, max); 
			else getStatistics(dummy, dummy, dummy, max);
			setMinAndMax(0, max);
			setLut(redVel, greenVel, blueVel);
			setLocation(1509, 100);
			for(a=1; a<512/width; a++){
				wait(100);
				run("In [+]");
			}
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("Max Wave Vector Velocity mask ("+ grid + " grid " + step +" step)");
			run("Size...", "width="+width+" height="+height+" depth="+nSlices+" constrain average interpolation=Bicubic");
			imageCalculator("Multiply stack", "Max Wave Vector Velocity mask ("+ grid + " grid " + step +" step)","mask NaN mask");
			if(nSlices > 1) Stack.getStatistics(dummy, dummy, dummy, max); 
			else getStatistics(dummy, dummy, dummy, max);
			setMinAndMax(0, max);
			setLut(redVel, greenVel, blueVel);
			setLocation(1509, 565);
			for(a=1; a<512/width; a++){
				wait(100);
				run("In [+]");
			}
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			
			//Close the NaN mask
			close("dF/dt NaN mask");
			close("mask NaN mask");
		}
		//Otherwise, create quiver plots
		else{
			//Close extra windows
			close("mask NaN mask");
			close("dF/dt NaN mask");
			
			//Generate quiver plots of the four vector sets
			quiverPlot("Max Wave Vector Angle dF/dt ("+ grid + " grid " + step +" step)", "Max Wave Vector Velocity dF/dt ("+ grid + " grid " + step +" step)");
			quiverPlot("Vector Sum Angle dF/dt ("+ grid + " grid " + step +" step)", "Vector Sum Velocity dF/dt ("+ grid + " grid " + step +" step)");
			quiverPlot("Max Wave Vector Angle mask ("+ grid + " grid " + step +" step)", "Max Wave Vector Velocity mask ("+ grid + " grid " + step +" step)");
			quiverPlot("Vector Sum Angle mask ("+ grid + " grid " + step +" step)", "Vector Sum Velocity mask ("+ grid + " grid " + step +" step)");
		
			plotNameArray = newArray(4);
			plotNameArray[0] = "Vector Sum dF/dt ("+ grid + " grid " + step +" step)";
			plotNameArray[1] = "Vector Sum mask ("+ grid + " grid " + step +" step)";
			plotNameArray[2] = "Max Wave Vector dF/dt ("+ grid + " grid " + step +" step)";
			plotNameArray[3] = "Max Wave Vector mask ("+ grid + " grid " + step +" step)";
			
			if(colorCode){
				imageNameArray = newArray(3);
				imageNameArray[0] = "dF Stack Copy";
				imageNameArray[1] = "dF Stack";
				imageNameArray[2] = "Objects map of dF Stack";
			
				//Save all the plots, close them, and them, re-open them, and delete the original files to restore batch mode
				for(a=0; a<plotNameArray.length + imageNameArray.length; a++){
					if(a<plotNameArray.length){
						selectWindow(plotNameArray[a]);
						run("Select None");
						saveAs("tiff", directory + a + "55XUTUv6VP0Z.tif");
						close(a + "55XUTUv6VP0Z.tif");
					}
					else{
						selectWindow(imageNameArray[a-plotNameArray.length]);
						run("Select None");
						saveAs("tiff", directory + a + "55XUTUv6VP0Z");
						close(a + "55XUTUv6VP0Z.tif");
					}
				}
				setBatchMode("exit & display");
				for(a=0; a<plotNameArray.length + imageNameArray.length; a++){
					if(a<plotNameArray.length){
						open(directory + a + "55XUTUv6VP0Z.tif");
						dummy = File.delete(directory + a + "55XUTUv6VP0Z.tif");
						selectWindow(a + "55XUTUv6VP0Z.tif");
						rename(plotNameArray[a]);
					}
					else{
						open(directory + a + "55XUTUv6VP0Z.tif");
						dummy = File.delete(directory + a + "55XUTUv6VP0Z.tif");
						selectWindow(a + "55XUTUv6VP0Z.tif");
						rename(imageNameArray[a-plotNameArray.length]);
					}
				}
				
				colorCodeQuiver(plotNameArray, "physics", "dF Stack", "Objects map of dF Stack");
			}
			else{
				//Trim plot border
				for(a=0; a<plotNameArray.length; a++){
					selectWindow(plotNameArray[a]);
					run("Canvas Size...", "width=511 height=511 position=Center zero");
				}		
				setBatchMode("exit & display");
			}
			
			//Show and position windows
			selectWindow("Vector Sum dF/dt ("+ grid + " grid " + step +" step)");
			setLocation(0,0,525,525);
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("Vector Sum mask ("+ grid + " grid " + step +" step)");
			setLocation(0,525,525,525);
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("Max Wave Vector dF/dt ("+ grid + " grid " + step +" step)");
			setLocation(460,0,525,525);
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("Max Wave Vector mask ("+ grid + " grid " + step +" step)");
			setLocation(460,525,525,525);
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
		
			selectWindow("dF Stack Copy");
			run("Rainbow RGB");
			rename("Processed dF Stack");
			setLocation(920,0,350,350);
			
			selectWindow("dF Stack");
			rename("dF Stack Mask");
			setLocation(920,350,350,350);
		
			selectWindow("Objects map of dF Stack");
			setLocation(920,700,350,350);			
		}
	}
	//Deposit results into a temporary subdirectory
	//Some files names are not saveable, so create an array to temporarily store the names.
	if(fileNum == 0){
		tempNameArray = newArray(nImages);
		tempCount = 0;

		while(nImages>0){
			tempNameArray[tempCount] = getTitle();
			saveAs("tiff", tempDirArray[fileNum] + tempCount);
			close();
			wait(100); //This wait is needed or else the next getTitle may return the last closed image
			tempCount += 1;
		}
	}
	else{
		for(temp = 0; temp<tempNameArray.length; temp++){
			selectWindow(tempNameArray[temp]);
			saveAs("tiff", tempDirArray[fileNum] + temp);
			close();
			wait(100);		
		}
	}

	//Save the resuts to the temporary arrays
	tempBZarray = newArray(nResults);
	tempBDepthArray = newArray(nResults);
	for(r = 0; r<nResults; r++){
		tempBZarray[r] = getResult("BZ", r) + totalSlices;
		tempBDepthArray[r] = getResult("B-depth", r);
	}

	BZarray = Array.concat(BZarray,tempBZarray);
	BDepthArray = Array.concat(BDepthArray, tempBDepthArray);
	
	//Update the total slices count
	totalSlices += slices;
		
	//clear the results table
	run("Clear Results");

	Array.print(cumXarray);
	Array.print(cumYarray);
}

//If individual results are requested, concatenate the results from each run, and present the final windows
if(!cumulativeAnalysis){
	setBatchMode(true);
	
	//Concantenate the stacks back together into one main stack
	for(fileNum=0; fileNum<tempNameArray.length; fileNum++){
		concatString = "  title=[" + fileNum + "ehxA8Jlmuj.tif] ";
		for(dirNum=0; dirNum<tempDirArray.length; dirNum++){
			open(tempDirArray[dirNum] + fileNum + ".tif");
			rename(dirNum);
			dummy = File.delete(tempDirArray[dirNum] + fileNum + ".tif");
			concatString += "image" + dirNum + 1 + "=" + dirNum + " ";
		}
		run("Concatenate...", concatString);
		saveAs("tiff", directory + fileNum + "ehxA8Jlmuj.tif");
		close(fileNum + "ehxA8Jlmuj.tif");	
	}
	
	//Remove the temporary folders
	for(dirNum=0; dirNum<tempDirArray.length; dirNum++) dummy = File.delete(tempDirArray[dirNum]);

	//Pullup the concatenated stack and make the final user interface
	for(fileNum=0; fileNum<tempNameArray.length; fileNum++){
		open(directory + fileNum + "ehxA8Jlmuj.tif");
		selectWindow(fileNum + "ehxA8Jlmuj.tif");
		rename(tempNameArray[fileNum]);
		dummy = File.delete(directory + fileNum + "ehxA8Jlmuj.tif");
	}

	//Rebuild the results table
	for(r = 0; r<BZarray.length; r++){
		setResult("BZ", r, BZarray[r]);
		setResult("B-depth", r, BDepthArray[r]);	
	}
	//Calcaulte the cumulative angle and velocity maps
	newImage("Cumulative Velocity dF/dt ("+ grid + " grid " + step +" step)", "32-bit black", step, step, 1);
	newImage("Cumulative Angle dF/dt ("+ grid + " grid " + step +" step)", "32-bit black", step, step, 1);
	wait(100);
	for(a=0; a<step; a++){
		for(b=0; b<step; b++){
			if(abs(cumXarray[a*step + b]) + abs(cumYarray[a*step + b]) > 0 && cumVelCountArray[a*step + b] > 0) cumVelArray[a*step + b] = sqrt((cumXarray[a*step + b]*cumXarray[a*step + b])+(cumYarray[a*step + b]*cumYarray[a*step + b]))/cumVelCountArray[a*step + b];
			else cumVelArray[a*step + b] = 0;
			cumAngleArray[a*step + b] = atan2(cumYarray[a*step + b], cumXarray[a*step + b])*180/PI;
		}
	}
	selectWindow("Cumulative Angle dF/dt ("+ grid + " grid " + step +" step)");
	for(a=0; a<step; a++){
		for(b=0; b<step; b++){
			setPixel(a, b, 0-cumAngleArray[a*step + b]);
		}
	}
	run("Duplicate...", "title=[Cumulative Angle] duplicate");
	
	selectWindow("Cumulative Velocity dF/dt ("+ grid + " grid " + step +" step)");
	for(a=0; a<step; a++){
		for(b=0; b<step; b++){
			setPixel(a, b, cumVelArray[a*step + b]);
		}
	}
	run("Duplicate...", "title=[Cumulative Velocity] duplicate");
	setBatchMode("exit & display");
	quiverPlot("Cumulative Angle dF/dt ("+ grid + " grid " + step +" step)", "Cumulative Velocity dF/dt ("+ grid + " grid " + step +" step)");

		
		//If the ouput type is "map", then create all maps
		if(matches(outputType, "Maps")){			
			
			selectWindow("Vector Sum Angle dF/dt ("+ grid + " grid " + step +" step)");
			setLocation(0, 100);
			for(a=1; a<512/width; a++){
				wait(100);
				run("In [+]");
			}
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("Max Wave Vector Angle dF/dt ("+ grid + " grid " + step +" step)");
			setLocation(0, 565);
			for(a=1; a<512/width; a++){
				wait(100);
				run("In [+]");
			}
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("Vector Sum Velocity dF/dt ("+ grid + " grid " + step +" step)");
			setLocation(410, 100);
			for(a=1; a<512/width; a++){
				wait(100);
				run("In [+]");
			}
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("Max Wave Vector Velocity dF/dt ("+ grid + " grid " + step +" step)");
			setLocation(410, 565);
			for(a=1; a<512/width; a++){
				wait(100);
				run("In [+]");
			}
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("Objects map of dF Stack");
			setLocation(820, 720);
			for(a=2; a<512/width; a++){
				wait(100);
				run("In [+]");
			}
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("dF Stack");
			rename("dF Stack Mask");
			setLocation(820, 385);
			for(a=2; a<512/width; a++){
				wait(100);
				run("In [+]");
			}
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("Processed dF Stack");
			setLocation(820, 50);
			for(a=2; a<512/width; a++){
				wait(100);
				run("In [+]");
			}
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("Vector Sum Angle mask ("+ grid + " grid " + step +" step)");
			setLocation(1100, 100);
			for(a=1; a<512/width; a++){
				wait(100);
				run("In [+]");
			}
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("Max Wave Vector Angle mask ("+ grid + " grid " + step +" step)");
			setLocation(1100, 565);
			for(a=1; a<512/width; a++){
				wait(100);
				run("In [+]");
			}
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("Vector Sum Velocity mask ("+ grid + " grid " + step +" step)");
			setLocation(1509, 100);
			for(a=1; a<512/width; a++){
				wait(100);
				run("In [+]");
			}
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("Max Wave Vector Velocity mask ("+ grid + " grid " + step +" step)");
			setLocation(1509, 565);
			for(a=1; a<512/width; a++){
				wait(100);
				run("In [+]");
			}
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}			
			
			//Create user interface to navigate waves
			quitMacro = false;
			while(!quitMacro){
				waitForUser("Select the wave of interest");
				selectedTitle = getTitle();
				
				//Find the selected wave
				waveID = 0;
				if(bitDepth() == 32){
					waveID = getSliceNumber();
				}
				else if(selectionType() != -1){
					slice = getSliceNumber();
					run("Select None");
					selectWindow("Objects map of dF Stack");
					setSlice(slice);
					run("Restore Selection");
					getStatistics(dummy, dummy, dummy, waveID);	
					run("Select None");
				}
			
				//If wave was selected, update all windows to present wave
				if(waveID > 0){
					selectWindow("Max Wave Vector Velocity dF/dt ("+ grid + " grid " + step +" step)");
					setSlice(waveID);
					selectWindow("Max Wave Vector Angle dF/dt ("+ grid + " grid " + step +" step)");
					setSlice(waveID);
					selectWindow("Vector Sum Velocity dF/dt ("+ grid + " grid " + step +" step)");	
					setSlice(waveID);
					selectWindow("Vector Sum Angle dF/dt ("+ grid + " grid " + step +" step)");	
					setSlice(waveID);
					selectWindow("Max Wave Vector Velocity mask ("+ grid + " grid " + step +" step)");
					setSlice(waveID);
					selectWindow("Max Wave Vector Angle mask ("+ grid + " grid " + step +" step)");
					setSlice(waveID);
					selectWindow("Vector Sum Velocity mask ("+ grid + " grid " + step +" step)");
					setSlice(waveID);	
					selectWindow("Vector Sum Angle mask ("+ grid + " grid " + step +" step)");	
					setSlice(waveID);
			
					//Get the stack positions of the wave
					waveStart = getResult("BZ", waveID-1);
					waveEnd = waveStart + getResult("B-depth", waveID-1);
			
					for(a=waveStart; a<=waveEnd; a++){
						selectWindow("Processed dF Stack");
						setSlice(a);
						selectWindow("dF Stack Mask");
						setSlice(a);
						selectWindow("Objects map of dF Stack");
						setSlice(a);
						wait(100);
					}	
					selectWindow(selectedTitle);		
				}
				else{
					quitMacro = getBoolean("Would you like to quit the macro?");
				}
			}
		}
		
		//Otherwise, create quiver plots
		else{
						
			//Show and position windows
			selectWindow("Vector Sum dF/dt ("+ grid + " grid " + step +" step)");
			setLocation(0,0,525,525);
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("Vector Sum mask ("+ grid + " grid " + step +" step)");
			setLocation(0,525,525,525);
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("Max Wave Vector dF/dt ("+ grid + " grid " + step +" step)");
			setLocation(460,0,525,525);
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
			selectWindow("Max Wave Vector mask ("+ grid + " grid " + step +" step)");
			setLocation(460,525,525,525);
			if(nSlices > 1){
				setSlice(2);
				setSlice(1);
			}
		
			selectWindow("Processed dF Stack");
			setLocation(920,0,350,350);
			
			selectWindow("dF Stack Mask");
			setLocation(920,350,350,350);
		
			selectWindow("Objects map of dF Stack");
			setLocation(920,700,350,350);

			selectWindow("Cumulative dF/dt (8 grid 32 step)");
			setLocation(1200, 100);
			
			selectWindow("Cumulative Angle");
			setLocation(1200, 670);
			//run("Size...", "width="+width+" height="+height+" depth="+nSlices+" constrain average interpolation=None");
			for(a=1; a<512/width; a++){
				wait(100);
				run("In [+]");
			}
			setMinAndMax(-180, 180);
			setLut(redAngle, greenAngle, blueAngle);
			
			selectWindow("Cumulative Velocity");
			//run("Size...", "width="+width+" height="+height+" depth="+nSlices+" constrain average interpolation=Bicubic");
			getStatistics(dummy, dummy, dummy, max);
			setMinAndMax(0, max);
			setLut(redVel, greenVel, blueVel);
			setLocation(1500, 670);
			for(a=1; a<512/width; a++){
				wait(100);
				run("In [+]");
			}
		
			//Create user interface to navigate waves
			quitMacro = false;
			while(!quitMacro){
				waitForUser("Select the wave of interest");
		
				selectedTitle = getTitle();
				
				//Find the selected wave
				waveID = 0;
				getDimensions(width, height, dummy, dummy, dummy);
				if(width == 511 && height == 511){
					waveID = getSliceNumber();
				}
				else if(selectionType() != -1){
					slice = getSliceNumber();
					run("Select None");
					selectWindow("Objects map of dF Stack");
					setSlice(slice);
					run("Restore Selection");
					getStatistics(dummy, dummy, dummy, waveID);	
					run("Select None");
				}
			
				//If wave was selected, update all windows to present wave
				if(waveID > 0){
					selectWindow("Vector Sum dF/dt ("+ grid + " grid " + step +" step)");
					setSlice(waveID);
					selectWindow("Vector Sum mask ("+ grid + " grid " + step +" step)");
					setSlice(waveID);
					selectWindow("Max Wave Vector dF/dt ("+ grid + " grid " + step +" step)");	
					setSlice(waveID);
					selectWindow("Max Wave Vector mask ("+ grid + " grid " + step +" step)");
					setSlice(waveID);
			
					//Get the stack positions of the wave
					waveStart = getResult("BZ", waveID-1);
					waveEnd = waveStart + getResult("B-depth", waveID-1);
			
					for(a=waveStart; a<=waveEnd; a++){
						selectWindow("Processed dF Stack");
						setSlice(a);
						selectWindow("dF Stack Mask");
						setSlice(a);
						selectWindow("Objects map of dF Stack");
						setSlice(a);
						wait(100);
					}
					selectWindow(selectedTitle);				
				}
				else{
					quitMacro = getBoolean("Would you like to quit the macro?");
				}
			}
			
		}
}	
	
function processStageII(image){
	//Process the filter to remove noise and isolate waves
	//Generate dF/F stack
	run("Z Project...", "projection=[Average Intensity]");
	imageCalculator("Divide create 32-bit stack", image,"AVG_" + image);
	close(image);
	close("AVG_" + image);
	selectWindow("Result of " + image);
	rename("dF Stack");
	
	//Remove noise and enrich for wave signal
	//remove pixel noise
	run("Median 3D...", "x=2 y=2 z=2");
	//solidify waves
	run("Mean...", "radius=10 stack");
	//enrich for spatial frequencies containing waves
	//run("Gaussian Blur...", "sigma=15 stack");
	
	//Calculate dF/dt stack
	//Create a duplicate stack offset forward one frame in time
	run("Duplicate...", "title=offset duplicate");
	selectWindow("offset");
	run("Reverse");
	setSlice(nSlices);
	run("Add Slice");
	run("Reverse");
	
	//Add a corresponding blank frame to the end of the original stack
	selectWindow("dF Stack");
	setSlice(nSlices);
	run("Add Slice");
	
	//Calculate the dT stack
	imageCalculator("Subtract create 32-bit stack", "dF Stack","offset");
	close("offset");
	close("dF Stack");
	
	//Convert stack to 8-bit
	selectWindow("Result of dF Stack");
	setSlice(1);
	run("Delete Slice");
	rename("dF Stack");
	selectWindow("dF Stack");
	Stack.getStatistics(dummy, dummy, dummy, max);
	setMinAndMax(0, max);
	run("8-bit");
	run("Duplicate...", "duplicate title=[Objects map of dF Stack]");		
}

function processStageIIIimage(image){		
	//Process the filter to remove noise and isolate waves
	//Generate dF/F stack
	run("Z Project...", "projection=[Average Intensity]");
	imageCalculator("Divide create 32-bit stack", image,"AVG_" + image);
	close(image);
	close("AVG_" + image);
	selectWindow("Result of " + image);
	rename("dF Stack");
	
	//Remove noise and enrich for wave signal
	//remove pixel noise
	run("Median 3D...", "x=2 y=2 z=2");
	//solidify waves
	run("Mean...", "radius=10 stack");
	
	//Create a mask of just the stage III waves
	run("Duplicate...", "duplicate title=mask");
	setAutoThreshold("Triangle dark stack");
	setOption("BlackBackground", false);
	run("Convert to Mask", "method=Triangle background=Dark black");	
	run("Divide...", "value=255 stack");
	
	//Clear background signal from stack
	imageCalculator("Multiply stack", "dF Stack", "mask");	
	close("mask");
	
	//Convert to 8-bit and create an object map segmenting each wave
	selectWindow("dF Stack");
	run("Duplicate...", "title=[1.tif] duplicate");
	selectWindow("1.tif");
	Stack.getStatistics(dummy, dummy, dummy, max);
	setMinAndMax(0, max);
	run("8-bit");
	run("3D OC Options", "volume surface nb_of_obj._voxels nb_of_surf._voxels integrated_density mean_gray_value std_dev_gray_value median_gray_value minimum_gray_value maximum_gray_value centroid mean_distance_to_surface std_dev_distance_to_surface median_distance_to_surface centre_of_mass bounding_box dots_size=5 font_size=10 redirect_to=none");run("3D Objects Counter", "threshold=1 slice=900 min.=1000 max.=29491200 objects statistics"); //1000 min size cutoff to remove non-wave phenomena
	selectWindow("Objects map of 1.tif");
	rename("Objects map of dF Stack");
	close("1.tif");
	
	//Calculate dF/dt stack
	//Create a duplicate stack offset forward one frame in time
	selectWindow("dF Stack");
	run("Duplicate...", "title=offset duplicate");
	selectWindow("offset");
	run("Reverse");
	setSlice(nSlices);
	run("Add Slice");
	run("Reverse");
	
	//Add a corresponding blank frame to the end of the original stack
	selectWindow("dF Stack");
	setSlice(nSlices);
	run("Add Slice");
	
	//Calculate the dt stack
	imageCalculator("Subtract create 32-bit stack", "dF Stack","offset");
	close("offset");
	close("dF Stack");
	selectWindow("Result of dF Stack");
	
	//Convert stack to 8-bit
	setSlice(1);
	run("Delete Slice");
	run("Duplicate...", "duplicate title=[dF Stack]");
	selectWindow("dF Stack");
	Stack.getStatistics(dummy, dummy, dummy, max);
	setMinAndMax(0, max);
	run("8-bit");
	close("Result of dF Stack");
}

function stageIIsegmentMask(startSlice, endSlice, waveID){
	//Remove the preceding substack so that it can be concatenated back on later
	selectWindow("Objects map of dF Stack");
	rename("3-post");
	//If the start slice is at the beginning of hte movie, do not remove a pre stack
	if(startSlice > 2){
		run("Make Substack...", "delete slices=1-" + startSlice - 1);
		selectWindow("Substack (1-" + startSlice-1 + ")");
		rename("1-pre");
	}

	//Remove the substack containing the wave
	selectWindow("3-post");
	run("Make Substack...", "delete slices=1-" + endSlice - startSlice);
	selectWindow("Substack (1-" + endSlice-startSlice + ")");
	rename("2-wave");

	//Create a mask of the wave
	run("Duplicate...", "duplicate title=mask");
	setAutoThreshold("Huang dark stack");
	setOption("BlackBackground", false);
	run("Convert to Mask", "method=Huang background=Dark black");
	run("Divide...", "value=255 stack");

	//Clear background signal from stack
	imageCalculator("Multiply stack", "2-wave","mask");	
	close("mask");

	//find where each pixel peaks in intensity
	selectWindow("2-wave");
	run("Z Project...", "projection=[Max Intensity]");
	imageCalculator("Divide create 32-bit stack", "2-wave","MAX_2-wave");
	selectWindow("Result of 2-wave");
	setMinAndMax(0.9990, 1.0000);
	run("8-bit");
	close("MAX_2-wave");

	//Code the wave ID via intensity
	selectWindow("Result of 2-wave");
	run("Divide...", "value=255.000 stack");
	run("Multiply...", "value=" + waveID + " stack");
	close("2-wave");

	//Rebuild the stack
	selectWindow("Result of 2-wave");
	rename("2-wave");
	if(nImages == 4) run("Concatenate...", "  title=[Objects map of dF Stack] image1=1-pre image2=2-wave image3=3-post image4=[-- None --]");
	if(nImages == 3) run("Concatenate...", "  title=[Objects map of dF Stack] image1=2-wave image2=3-post image3=[-- None --] image4=[-- None --]");

	//Create a results table for the vector analysis
	setResult("BZ", waveID-1, startSlice);
	setResult("B-depth", waveID-1, endSlice-startSlice);
}

function waveFrontStack(startSlice, endSlice, grid, waveID, waveGap, width, height, step, waveThreshold, analysisType, cumXarray, cumYarray, cumVelCountArray){
	
	//Remove the substack containing the wave
	selectWindow("wave");
	slices = nSlices;
	run("Make Substack...", "delete slices=" + startSlice + "-" + endSlice);
	close("wave");

	//Create a mask of just the current wave
	selectWindow("Substack (" + startSlice + "-" + endSlice + ")");
	rename("wave mask");

	//Create a mask of the wave
	selectWindow("wave mask");
	run("Macro...", "code=[if(v != " + waveID + ") v=0] stack");
	run("Multiply...", "value=255.000 stack");
	run("Divide...", "value=255.000 stack");

	//Add a max projection of the wave mask to the NaN mask
	selectWindow("wave mask");
	run("Z Project...", "projection=[Max Intensity]");
	selectWindow("MAX_wave mask");
	run("Select All");
	run("Copy");
	close("MAX_wave mask");
	selectWindow(analysisType + " NaN mask");
	setSlice(waveID);
	run("Paste");

	//Retrieve the corresponding substack from the dF stack
	selectWindow("dF Stack");
	run("Make Substack...", "slices=" + startSlice + "-" + endSlice);
	selectWindow("Substack (" + startSlice + "-" + endSlice + ")");
	rename("wave dF");

	//Isolate the current wave in the dF stack
	imageCalculator("Multiply stack", "wave dF","wave mask");
	close("wave mask");
	
	//Measure the transit time of the wave through each grid point
	selectWindow("wave dF");
	maxVelocityArray = newArray(step*step);
	maxAngleArray = newArray(step*step);
	vecSumVelArray = newArray(step*step);
	vecSumAngleArray = newArray(step*step);
	
	for(xGrid = 0; xGrid < step; xGrid++){
		showProgress(xGrid/step);
		for(yGrid = 0; yGrid < step; yGrid++){
			makeRectangle(((xGrid + 0.5)*width/step-0.5*width/grid), ((yGrid + 0.5)*height/step-0.5*height/grid), width/grid, height/grid);
//			wait(100);
			waveXcm = newArray(nSlices);
			waveYcm = newArray(nSlices);
			Array.fill(waveXcm, -1);
			Array.fill(waveYcm, -1);
			
			//Find wave passing through grid box
			for(a=1; a<=nSlices; a++){
				setSlice(a);
				List.setMeasurements;
				mean = List.getValue("Mean");
				//If the mean in the selection is > 0, wave is in the box
				if(mean > waveThreshold){
					waveXcm[a] = List.getValue("XM");
					waveYcm[a] = List.getValue("YM");
				}
			}

			//Calculate the moment velocity and angle
			velCount = 0;
			xVecSum = 0;
			yVecSum = 0;
			waveVel = 0;
			maxVel = 0;
			maxAngle = 0;
			for(a=0; a<waveXcm.length-1; a++){
				if(waveXcm[a] > -1){
					if(waveXcm[a+1] > -1){
						xDist = waveXcm[a+1] - waveXcm[a];
						yDist = waveYcm[a+1] - waveYcm[a];
						if(matches(waveStage, "Stage III")){
							xDist = xDist * 4;
							yDist = yDist * 4;
						}
						
						waveVel = sqrt((xDist*xDist)+(yDist*yDist));
						if(waveVel > maxVel){
							maxVel = waveVel;
							maxAngle = atan2(yDist, xDist)*180/PI; 
						}
						xVecSum += xDist;
						yVecSum += yDist;
						velCount += 1;

					}
				}
			}

			//Calculate the mean velocity and angle
			//Calculate velocity only if non-zero (otherwise NaN will result)
			if(abs(xVecSum) + abs(yVecSum) > 0 && velCount > 0) vecSumVel = sqrt((xVecSum*xVecSum)+(yVecSum*yVecSum))/velCount;
			else vecSumVel = 0;
			vecSumAngle = atan2(yVecSum, xVecSum)*180/PI;

			
			//Store the wave velocity for that grid
			maxVelocityArray[xGrid*step + yGrid] = maxVel;
			maxAngleArray[xGrid*step + yGrid] = maxAngle;
			vecSumVelArray[xGrid*step + yGrid] = vecSumVel;
			vecSumAngleArray[xGrid*step + yGrid] = vecSumAngle;
			//If a cumulative output is desired, calculate the cumulative vector displacement
			if(!cumulativeAnalysis && matches(analysisType, "dF/dt")){
				cumXarray[xGrid*step + yGrid] = cumXarray[xGrid*step + yGrid] + xVecSum;
				cumYarray[xGrid*step + yGrid] = cumYarray[xGrid*step + yGrid] + yVecSum;
				cumVelCountArray[xGrid*step + yGrid] = cumVelCountArray[xGrid*step + yGrid] + velCount;
			}
		}
	}

	//output the array onto the Max Velocity image
	selectWindow("Max Wave Vector Velocity " + analysisType + " ("+ grid + " grid " + step +" step)");
	setSlice(waveID);
	setMetadata("Label", "Wave " + waveID);
	for(a=0; a<step; a++){
		for(b=0; b<step; b++){
			setPixel(a, b, maxVelocityArray[a*step + b]);
		}
	}
	//Remove Velocity outliers
	run("Median...", "radius=2 slice");

	//output the array onto the Max Angle image
	selectWindow("Max Wave Vector Angle " + analysisType + " ("+ grid + " grid " + step +" step)");
	setSlice(waveID);
	setMetadata("Label", "Wave " + waveID);
	for(a=0; a<step; a++){
		for(b=0; b<step; b++){
			//Use 360-angle to get roation to be counter clockwise rather than clockwise
			setPixel(a, b, 0-maxAngleArray[a*step + b]);
		}
	}
	//Remove Velocity outliers
	run("Median...", "radius=2 slice");
	
	//output the array onto the Vector Sum Velocity image
	selectWindow("Vector Sum Velocity " + analysisType + " ("+ grid + " grid " + step +" step)");
	setSlice(waveID);
	setMetadata("Label", "Wave " + waveID);
	for(a=0; a<step; a++){
		for(b=0; b<step; b++){
			setPixel(a, b, vecSumVelArray[a*step + b]);
		}
	}
	//Remove Velocity outliers
	run("Median...", "radius=2 slice");
	
	//output the array onto the Vector Sum Angle image
	selectWindow("Vector Sum Angle " + analysisType + " ("+ grid + " grid " + step +" step)");
	setSlice(waveID);
	setMetadata("Label", "Wave " + waveID);
	for(a=0; a<step; a++){
		for(b=0; b<step; b++){
			//Use 0-angle to get roation to be counter clockwise rather than clockwise
			setPixel(a, b, 0-vecSumAngleArray[a*step + b]);
		}
	}
	//Remove Velocity outliers
	run("Median...", "radius=2 slice");

	close("wave dF");
}

function quiverPlot(angleImage, speedImage){
	//Replace NaNs with zeros taking advantage of the fact that NaN != NaN by definition
	selectWindow(angleImage);
	run("Macro...", "code=[if (v != v) v=0; ] stack");
	selectWindow(speedImage);
	run("Macro...", "code=[if (v != v) v=0; ] stack");

	//Create a quiver plot for each slice in the stack, and concatenate them into a stack
	slices = nSlices;
	for(a=1; a<=slices; a++){
		//Create a copy of the current image in the stack
		selectWindow(angleImage);
		setSlice(a);
		run("Duplicate...", "title=angle");
		selectWindow(speedImage);
		setSlice(a);
		run("Duplicate...", "title=speed");

		//Create the corresponding quicer plot
		run("Quiver Plot - Grant","angle, speed, 512");

		//Close the angle and speed images
		close("angle");
		close("speed");

		//Remove Grid and tick marks
		selectWindow("Quiver Plot");
		Plot.setFormatFlags("0");
		
		//Create an image copy of the plot
		run("Duplicate...", "title=[Quiver Image]");

		//Close the quiver plot
		selectWindow("Quiver Plot");
		run("Close");

		//If the original data is a stack, then concatenate 
		selectWindow("Quiver Image");
		if(slices > 1){
			if(a == 1) rename("Quiver Stack");
			if(a > 1) run("Concatenate...", "  title=[Quiver Stack] image1=[Quiver Stack] image2=[Quiver Image] image3=[-- None --]");
		}
		else rename("Quiver Stack");
	}

	//Add the metadata back onto the stack
	selectWindow("Quiver Stack");
	for(a=1; a<=slices; a++){
		setSlice(a);
		setMetadata("Label", "Wave " + a);
	}

	//Crop the stack to only show the quiver arrows
	makeRectangle(60, 13, 513, 513);
	run("Crop");

	//Rename the stack based on the angle image name
	selectWindow("Quiver Stack");
	rename(replace(angleImage, " Angle", ""));

	//Close the original images used to create the plot
	close(angleImage);
	close(speedImage);

}

function colorCodeQuiver(plot, LUT, mask, object){	
	//Color code each wave by its progression in time
	for(a=0; a<nResults; a++){
		startSlice = getResult("BZ", a);
		stopSlice = getResult("B-depth",a) + startSlice;
		if(stopSlice + 1 >= slices) stopSlice = slices-1;
				
		//Create a color coded image of the corresponding substack
		selectWindow(mask);
		run("Make Substack...", "  slices=" + startSlice + "-" + stopSlice);
		rename("subMask");
		selectWindow(object);
		run("Make Substack...", "  slices=" + startSlice+1 + "-" + stopSlice+1);
		run("Grays");
		setMinAndMax(0,255);
		run("8-bit");
		setThreshold(a+1, a+1);
		run("Convert to Mask", "method=Default background=Default black");
		run("Divide...", "value=255.000 stack");
		rename("subObject");
		imageCalculator("Multiply stack", "subMask","subObject");
		close("subObject");
		selectWindow("subMask");
		wait(100);
		run("Temporal-Color Code", "lut=" + LUT + " start=1 end=" + nSlices + "");
		close("subMask");
		
		//Concatenate the color coded images together as a stack
		if(a > 0) run("Concatenate...", "  title=MAX_colored image1=MAX_colored image2=MAX_colored-1 image3=[-- None --]");
	}

	//Resize the mask to match the dimensions of the quiver plot
	selectWindow("MAX_colored");
	run("Size...", "width=513 height=513 depth=" + nSlices + " constrain average interpolation=Bilinear");
	wait(100);

	
	
	for(b=0; b<plot.length; b++){
		selectWindow("MAX_colored");
		run("Duplicate...", "title=1 duplicate");	
		//Subtract the plot image from the color coded mask to create a color coded plot
		imageCalculator("Subtract stack", "1", plot[b]);
	
		//Close extra images and rename color coded plot to same name as quiver plot
		close(plot[b]);
		selectWindow("1");
		rename(plot[b]);
	
		//Trim border from plot
		selectWindow(plot[b]);
		run("Canvas Size...", "width=511 height=511 position=Center zero");
	}
	close("MAX_colored");
}
