close("*");
open(File.openDialog("Choose a 16x stage II wave file."));
image = getTitle();

//Process the filter to remove noise and isolate waves
//Generate dF/F stack
run("Z Project...", "projection=[Average Intensity]");
imageCalculator("Divide create 32-bit stack", image,"AVG_" + image);
close(image);
close("AVG_" + image);
selectWindow("Result of " + image);
rename("dF Stack");

//Remove noise and enrich for wave signal
//remove pixel noise
run("Median 3D...", "x=2 y=2 z=2");
//solidify waves
run("Mean...", "radius=10 stack");

//Create a mask of just the stage III waves
run("Duplicate...", "duplicate title=mask");
setAutoThreshold("Triangle dark stack");
setOption("BlackBackground", false);
run("Convert to Mask", "method=Triangle background=Dark black");	
run("Divide...", "value=255 stack");

//Clear background signal from stack
imageCalculator("Multiply stack", "dF Stack", "mask");	
close("mask");

//Convert to 8-bit and create an object map sementing each wave
selectWindow("dF Stack");
Stack.getStatistics(dummy, dummy, dummy, max);
setMinAndMax(0, max);
run("8-bit");
run("3D OC Options", "volume surface nb_of_obj._voxels nb_of_surf._voxels integrated_density mean_gray_value std_dev_gray_value median_gray_value minimum_gray_value maximum_gray_value centroid mean_distance_to_surface std_dev_distance_to_surface median_distance_to_surface centre_of_mass bounding_box dots_size=5 font_size=10 store_results_within_a_table_named_after_the_image_(macro_friendly) redirect_to=none");
run("3D Objects Counter", "threshold=1 slice=900 min.=1000 max.=29491200 objects statistics"); //1000 min size cutoff to remove non-wave phenomena

//Create random lUT and apply to objects map
selectWindow("Objects map of dF Stack");
reds = newArray(0, 231, 25, 27, 112, 89, 53, 77, 155, 153, 91, 19, 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255);
greens = newArray(0, 217, 131, 18, 66, 198, 59, 170, 108, 8, 167, 207, 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255);
blues = newArray(0, 43, 203, 219, 253, 158, 5, 190, 72, 11, 23, 233, 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255);
setLut(reds, greens, blues);
